PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AY_SymmetrySpanWTrial
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Routines
  Routine Instructions
    TextComponent instuctions_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        In this experiment you will try to memorize the position of colored squares you see on the screen while you make symmetry judgments about other pictures. In the next few minutes, we will explain how the experiment will work.

        Press Space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Reset_sequence
    CodeComponent reset_code
      Code Type = Py
      Begin Routine:
        correct_sequence = []
  Routine Instructions_2
    TextComponent instuctions
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        For this experiment, squares will appear on the screen one at a time between a symmetry task. Try to remember where each square was, in the order it was presented in.

        You will now attempt a sample. First, you will see a red square within a 4x4 grid, then an assessment of abstract symmetry. Try your best to remember the red square's position.

        Press Space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_3
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Before a square is presented, a picture will appear on the screen, and you will have to decide if it is symmetrical. A picture is symmetrical if you can fold it in half vertically and the picture on the left lines up with the picture on the right.

        After 5 symmetry-square loops, you will be asked to recall the order of the red squares on a 4x4 grid.

        Press space to start the experiment.
  Routine Square_recall_practice
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Recall
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    TextComponent instructions_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Select square locations in order that you saw them
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    TextComponent fixation_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid_2
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
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    MouseComponent square_resp
      clickable = square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9, square_10, square_11, square_12, square_13, square_14, square_15, square_16
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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    PolygonComponent square_1
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_2
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_3
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_4
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_5
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_6
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_7
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_8
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_9
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_10
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_11
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_12
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_13
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_14
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_15
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_16
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    CodeComponent store_correct_code
      Code Type = Py
      End Routine:
        square_corr = correct_sequence[recall.thisN]
        square_resp.clicked_name = square_resp.clicked_name[0]
        if square_resp.clicked_name == square_corr:
            corr = 1
        else:
            corr = 0
        thisExp.addData('square_correct', corr)
  Routine Square_pres
    TextComponent fixation_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    PolygonComponent square
      fillColor = $[0.804,-1.000,-1.000]
      pos [set every repeat] = [-0.075, 0.075]
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    CodeComponent update_sequence
      Code Type = Py
      Begin Routine:
        correct_sequence.append(square_corr)
  Routine Sym_trials
    ImageComponent symmetry_grid
      image [set every repeat] = $picture
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    KeyboardComponent sym_resp
      allowedKeys = 'left','right'
      correctAns = $sym_corr
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = <-    symmetrical  |  non-symmetrical ->
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  Routine thankubailey
  Routine Instructions_4
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Your job is to select each square in the order presented.
        To do this, use the mouse to select the appropriate boxes. The squares you select will turn red.

        This is a sample run, so you will only need to recall one box.

        Press Space to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialsymmetry_pres
    ImageComponent image
      image = sym1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = <-    symmetrical  |  non-symmetrical ->
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  Routine trialsquare_pres
    ImageComponent image_2
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon
      fillColor = $[0.804,-1.000,-1.000]
      pos = [-0.075, 0.075]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine recalltrial
    ImageComponent trialselect
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Select square locations in order that you saw them
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  Routine trialsymmetry_selection
Flow
  Routine Instructions
  Routine Instructions_2
  Routine trialsquare_pres
  Routine trialsymmetry_pres
  Routine Instructions_4
  Routine recalltrial
  Routine Instructions_3
  LoopInitiator memory_trials loopType="TrialHandler"
    conditionsFile = choose_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition_file', 'cond1.xlsx')]),
      OrderedDict([('condition_file', 'cond2.xlsx')])]
    Routine Reset_sequence
    LoopInitiator sym_trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Square_pres
      Routine Sym_trials
    LoopTerminator sym_trials
    LoopInitiator recall loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Square_recall_practice
    LoopTerminator recall
  LoopTerminator memory_trials
