PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Symmetry Span Task
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Routines
  Routine Instructions
    TextComponent instuctions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to memorise the location of a red square on a 4x4 grid. After each red square trial you will be presented with symmetry span trial where will be required to judge whether the presented image is VERTICALLY symmetrical. Press left arrow if the image is vertically symmetrical and right arrow if it is not. Square and symmetry trials will be repeated untill you will be asked to recall the location of the red square from all trials in the order that you saw them. Press space to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Square_recall
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Recall
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    TextComponent instructions_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Select square locations in order that you saw them
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    TextComponent fixation_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid_2
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
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    MouseComponent square_resp
      clickable = square_1, square_2, square_3, square_4, square_5, square_6, square_7, square_8, square_9, square_10, square_11, square_12, square_13, square_14, square_15, square_16
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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    PolygonComponent square_1
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_2
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_3
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_4
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_5
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_6
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_7
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_8
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, 0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_9
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_10
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_11
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_12
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.075)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_13
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.225, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_14
      fillColor = $[1.000,0.004,0.004]
      pos = (-0.075, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_15
      fillColor = $[1.000,0.004,0.004]
      pos = (0.075, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    PolygonComponent square_16
      fillColor = $[1.000,0.004,0.004]
      pos = (0.225, -0.225)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    CodeComponent store_correct_code
      Code Type = Py
      End Routine:
        square_corr = correct_sequence[recall.thisN]
        square_resp.clicked_name = square_resp.clicked_name[0]
        if square_resp.clicked_name == square_corr:
            corr = 1
        else:
            corr = 0
        thisExp.addData('square_correct', corr)
  Routine Square_pres
    TextComponent fixation_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent grid
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    PolygonComponent square
      fillColor = $[0.804,-1.000,-1.000]
      pos [set every repeat] = $square_pos
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    CodeComponent update_sequence
      Code Type = Py
      Begin Routine:
        correct_sequence.append(square_corr)
  Routine Reset_sequence
    CodeComponent reset_code
      Code Type = Py
      Begin Routine:
        correct_sequence = []
  Routine Sym_trials
    ImageComponent symmetry_grid
      image [set every repeat] = $picture
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    KeyboardComponent sym_resp
      allowedKeys = 'left','right'
      correctAns = $sym_corr
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = <-    symmetrical  |  non-symmetrical ->
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Flow
  Routine Instructions
  LoopInitiator memory_trials loopType="TrialHandler"
    conditionsFile = choose_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition_file', 'cond1.xlsx')]),
      OrderedDict([('condition_file', 'cond2.xlsx')])]
    Routine Reset_sequence
    LoopInitiator sym_trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Square_pres
      Routine Sym_trials
    LoopTerminator sym_trials
    LoopInitiator recall loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Square_recall
    LoopTerminator recall
  LoopTerminator memory_trials
